PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Lab in psych long assignment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent Introduction
      color = 0.2706, 0.6549, 1.0000
      font = Times new roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
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      text:
        WELCOME :)

        You're just a few clicks away from the end
  Routine instruction_1
    TextComponent Instruction
      color = 0.8824, 1.0000, 1.0000
      font = Times new roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        STUDY PHASE
    TextComponent Instructionstudy
      color = 0.8824, 1.0000, 1.0000
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Please read the List of words displayed next.
  Routine wors
    TextComponent words_for_study
      color = 1.0000, 1.0000, 1.0000
      font = Times new roman
      letterHeight = 0.05
      pos = (-0.30, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text:
        Apple
        Chair
        Cloud
        Banana
        Garden
        Window
        Purple
        Dragon
        Turtle
        Rocket
        Spider
        Coffee
        Guitar
        Summer
        Circle
    PolygonComponent polygon
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.30, 0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    PolygonComponent polygon_2
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0.30, 0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 0.4
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    PolygonComponent polygon_3
      fillColor = -0.2157, 0.1686, 0.8588
      lineColor = -0.2157, 0.1686, 0.8588
      pos = (0.30, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.4
      stopVal [time (s)] = 0.6
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    PolygonComponent polygon_4
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.3961, -0.7333, -0.7333
      pos = (0.30, -0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.6
      stopVal [time (s)] = 0.8
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    PolygonComponent polygon_5
      fillColor = 1.0000, 0.6863, -1.0000
      lineColor = 1.0000, 0.6863, -1.0000
      pos = (0.30, -0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.8
      stopVal [time (s)] = 1.0
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    PolygonComponent polygon_6
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.30, 0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 1.2
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    PolygonComponent polygon_7
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0.30, 0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.2
      stopVal [time (s)] = 1.4
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    PolygonComponent polygon_8
      fillColor = -0.2157, 0.1686, 0.8588
      lineColor = -0.2157, 0.1686, 0.8588
      pos = (0.30, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.4
      stopVal [time (s)] = 1.6
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    PolygonComponent polygon_9
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.3961, -0.7333, -0.7333
      pos = (0.30, -0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.6
      stopVal [time (s)] = 1.8
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    PolygonComponent polygon_10
      fillColor = 1.0000, 0.6863, -1.0000
      lineColor = 1.0000, 0.6863, -1.0000
      pos = (0.30, -0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.8
      stopVal [time (s)] = 2.0
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    PolygonComponent polygon_11
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.30, 0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.0
      stopVal [time (s)] = 2.2
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    PolygonComponent polygon_12
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0.30, 0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.2
      stopVal [time (s)] = 2.4
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    PolygonComponent polygon_13
      fillColor = -0.2157, 0.1686, 0.8588
      lineColor = -0.2157, 0.1686, 0.8588
      pos = (0.30, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.4
      stopVal [time (s)] = 2.6
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    PolygonComponent polygon_14
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.3961, -0.7333, -0.7333
      pos = (0.30, -0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.6
      stopVal [time (s)] = 2.8
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    PolygonComponent polygon_15
      fillColor = 1.0000, 0.6863, -1.0000
      lineColor = 1.0000, 0.6863, -1.0000
      pos = (0.30, -0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.8
      stopVal [time (s)] = 3.0
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    PolygonComponent polygon_16
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.30, 0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 3.0
      stopVal [time (s)] = 3.2
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    PolygonComponent polygon_17
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0.30, 0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 3.2
      stopVal [time (s)] = 3.4
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    PolygonComponent polygon_18
      fillColor = -0.2157, 0.1686, 0.8588
      lineColor = -0.2157, 0.1686, 0.8588
      pos = (0.30, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 3.4
      stopVal [time (s)] = 3.6
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    PolygonComponent polygon_19
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.3961, -0.7333, -0.7333
      pos = (0.30, -0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 3.6
      stopVal [time (s)] = 3.8
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    PolygonComponent polygon_20
      fillColor = 1.0000, 0.6863, -1.0000
      lineColor = 1.0000, 0.6863, -1.0000
      pos = (0.30, -0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 3.8
      stopVal [time (s)] = 4.0
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    PolygonComponent polygon_21
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.30, 0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 4.0
      stopVal [time (s)] = 4.2
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    PolygonComponent polygon_22
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0.30, 0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 4.2
      stopVal [time (s)] = 4.4
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    PolygonComponent polygon_23
      fillColor = -0.2157, 0.1686, 0.8588
      lineColor = -0.2157, 0.1686, 0.8588
      pos = (0.30, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 4.4
      stopVal [time (s)] = 4.6
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    PolygonComponent polygon_24
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.3961, -0.7333, -0.7333
      pos = (0.30, -0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 4.6
      stopVal [time (s)] = 4.8
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    PolygonComponent polygon_25
      fillColor = 1.0000, 0.6863, -1.0000
      lineColor = 1.0000, 0.6863, -1.0000
      pos = (0.30, -0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 4.8
      stopVal [time (s)] = 5.0
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    PolygonComponent polygon_26
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.30, 0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 5.0
      stopVal [time (s)] = 5.2
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    PolygonComponent polygon_27
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0.30, 0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 5.2
      stopVal [time (s)] = 5.4
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    PolygonComponent polygon_28
      fillColor = -0.2157, 0.1686, 0.8588
      lineColor = -0.2157, 0.1686, 0.8588
      pos = (0.30, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 5.4
      stopVal [time (s)] = 5.6
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    PolygonComponent polygon_29
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.3961, -0.7333, -0.7333
      pos = (0.30, -0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 5.6
      stopVal [time (s)] = 5.8
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    PolygonComponent polygon_30
      fillColor = 1.0000, 0.6863, -1.0000
      lineColor = 1.0000, 0.6863, -1.0000
      pos = (0.30, -0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 5.8
      stopVal [time (s)] = 6.0
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    PolygonComponent polygon_31
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.30, 0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 6.0
      stopVal [time (s)] = 6.2
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    PolygonComponent polygon_32
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0.30, 0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 6.2
      stopVal [time (s)] = 6.4
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    PolygonComponent polygon_33
      fillColor = -0.2157, 0.1686, 0.8588
      lineColor = -0.2157, 0.1686, 0.8588
      pos = (0.30, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 6.4
      stopVal [time (s)] = 6.6
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    PolygonComponent polygon_34
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.3961, -0.7333, -0.7333
      pos = (0.30, -0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 6.6
      stopVal [time (s)] = 6.8
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    PolygonComponent polygon_35
      fillColor = 1.0000, 0.6863, -1.0000
      lineColor = 1.0000, 0.6863, -1.0000
      pos = (0.30, -0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 6.8
      stopVal [time (s)] = 7.0
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    PolygonComponent polygon_36
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.30, 0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 7.0
      stopVal [time (s)] = 7.2
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    PolygonComponent polygon_37
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0.30, 0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 7.2
      stopVal [time (s)] = 7.4
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    PolygonComponent polygon_38
      fillColor = -0.2157, 0.1686, 0.8588
      lineColor = -0.2157, 0.1686, 0.8588
      pos = (0.30, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 7.4
      stopVal [time (s)] = 7.6
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    PolygonComponent polygon_39
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.3961, -0.7333, -0.7333
      pos = (0.30, -0.30)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 7.6
      stopVal [time (s)] = 7.8
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    PolygonComponent polygon_40
      fillColor = 1.0000, 0.6863, -1.0000
      lineColor = 1.0000, 0.6863, -1.0000
      pos = (0.30, -0.50)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 7.8
      stopVal [time (s)] = 8.0
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  Routine Instruction_2
    TextComponent please_solve_problem
      color = 0.8824, 1.0000, 1.0000
      font = Times new roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Now that you have read the words, please solve the problem given in the next slide
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  Routine Math_problem
    TextComponent MATH_
      color = 0.1216, 0.4745, 0.1216
      font = Time New roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Math_problem
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    TextboxComponent Math_solution
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.20)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_phase
    TextComponent text
      color = 0.8824, 1.0000, 1.0000
      font = Times new roman
      letterHeight = 0.05
      pos = (0, 0.20)
      startVal [time (s)] = 0.0
      text = Please insert the wored on the basis of the fragment given.
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    TextComponent text_2
      color = 0.1216, 0.4745, 0.1216
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Test_Fragment
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.30)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_phase_2
  Routine thank_you
  Routine Thank_you
    TextComponent text_3
      color = 0.8824, 1.0000, 1.0000
      font = Times new Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for your precious time
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine trial
    Routine instruction_1
    Routine wors
    Routine Instruction_2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Math sum assignment 1.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Math_problem', '15+7='), ('Math_answer', 22)]),
        OrderedDict([('Math_problem', '25-9='), ('Math_answer', 16)]),
        OrderedDict([('Math_problem', '8+12='), ('Math_answer', 20)]),
        OrderedDict([('Math_problem', '50-27='), ('Math_answer', 23)]),
        OrderedDict([('Math_problem', '32-16='), ('Math_answer', 16)])]
      Routine Math_problem
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = words for solo lab assignment.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Study_word', 'Apple'), ('Test_Fragment', 'A_p_e'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Chair'), ('Test_Fragment', 'Ch_i_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Cloud'), ('Test_Fragment', 'C_o_d'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Banana'), ('Test_Fragment', 'B_a_a'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Garden'), ('Test_Fragment', 'G_r_e_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Window'), ('Test_Fragment', 'W_n_o_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Purple'), ('Test_Fragment', 'P_rp_e'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Dragon'), ('Test_Fragment', 'D_a_o_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Turtle'), ('Test_Fragment', 'T_r_l_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Rocket'), ('Test_Fragment', 'R_c_e_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Spider'), ('Test_Fragment', 'S_i_e_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Coffee'), ('Test_Fragment', 'C_f_e_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Guitar'), ('Test_Fragment', 'G_i_a_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Summer '), ('Test_Fragment', 'S_m_e_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Circle'), ('Test_Fragment', 'C_r_l_'), ('Old_new', 'Old')]),
        OrderedDict([('Study_word', 'Table'), ('Test_Fragment', 'T_b_e'), ('Old_new', 'New')]),
        OrderedDict([('Study_word', 'Ocean'), ('Test_Fragment', 'O_ea_'), ('Old_new', 'New')])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
      Routine Test_phase
    LoopTerminator trials_2
    Routine Thank_you
  LoopTerminator trials_3
